OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Input Input 1

Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2013b/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize

0x341d3912 Sinus oscillator => #1
  Channel count = 27
  Sampling frequency = 500
  Generated epoch sample count = 32
Input signal=#1 -> 0x341d3912 LSL Export
  Signal stream = EEGDataStream
  Marker stream = openvibeMarkers

Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#3.Experiment information, Signal=#3.Signal stream -> 0x341d3912 EDF File Writer
  Filename = D:/Neuro/MasterThesis/Records/AllModules-record-[$core{date}-$core{time}].edf
LSL Communication => #5
  Output 1 Stream Name = MyMarkerS
Data=#3.Signal stream, Stimulations=#5, Channel Units=#3.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Run Command
  Stimulation 1 = 10000
  Command 1 = wt D:/Miniconda/python.exe d:/sharegit/SomaStim/openvibe/python/GIU_Sequencer_DN-RespElectro.py com28
