OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  To Finish the experiment close the GUI for the stimulations

Lua Stimulator
  Lua Script = D:/sharegit/SomaStim/openvibe/DN-RespElectro/RunCommand.lua
-> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/sharegit/SomaStim/openvibe/python/GIU_Sequencer_DN-RespElectro_NP.py COM18 NPMarkers

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Sinus oscillator => #3
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
LSL Communication => #4
  Output 1 Stream Name = NPMarkers
Data=#3, Stimulations=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#3, Stimulations=#4 -> 0x341d3912 EDF File Writer
  Filename = D:/sharegit/SomaStim/openvibe/python/record-[$core{date}-$core{time}].edf
#4 -> Player Controller
  Stimulation name = 1997
  Action to perform = Stop
