OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Lua Stimulator => #0
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/Basal_3min.lua
-> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#3.Signal stream, Channel Units=#3.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#3.Signal stream, Stimulation=#0 -> GDF file writer
  Filename = D:/sharegit/SomaStimNP/records/record-Alejandro-[$core{date}-$core{time}].gdf
