OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  To Finish the experiment close the GUI for the stimulations

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
LSL Communication => #1
  Output 1 Stream Name = NPMarkers
Signal=#0.Signal stream, Stimulation=#1 -> GDF file writer
  Filename = D:/sharegit/SomaStimNP/records/record-Alejandro-[$core{date}-$core{time}].gdf
Data=#0.Signal stream, Stimulations=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Player Controller
  Stimulation name = 1997
  Action to perform = Stop

Lua Stimulator
  Lua Script = D:/sharegit/SomaStimNP/openvibe/RunCommand.lua
-> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/sharegit/SomaStimNP/python/GIU_Sequencer_DN-RespElectro_NP.py COM4 NPMarkers
